<?xml version='1.0'?>
<model cmeta:id="NFATCycling" name="NFATCycling" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="uM">
        <unit prefix="micro" units="mole"/>
        <unit exponent="-1" units="liter"/>
    </units>
    <units name="per_s">
        <unit exponent="-1" units="s"/>
    </units>
    <units name="uM_per_s">
        <unit units="uM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="per_uM_s">
        <unit exponent="-1" units="uM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
***       C   O   M   P   O   N   E   N   T   S       ***
*********************************************************
-->
    <component name="NFAT_Cycling">
        <variable cmeta:id="v4" initial_value="7.68934e-3" name="k_f1" private_interface="out" units="per_uM_s"/>
        <variable cmeta:id="v5" initial_value="0.00144192" name="k_f2" private_interface="out" units="per_s"/>
        <variable cmeta:id="v6" initial_value="0.000361944" name="k_f3" private_interface="out" units="per_s"/>
        <variable cmeta:id="v7" initial_value="0.000444695" name="k_f4" private_interface="out" units="per_s"/>
        <variable cmeta:id="v8" initial_value="0.019256" name="k_r1" private_interface="out" units="per_s"/>
        <variable cmeta:id="v9" initial_value="0.0470813" name="k_r3" private_interface="out" units="per_uM_s"/>
        <variable cmeta:id="v10" name="NFATp_n" private_interface="in" public_interface="out" units="uM"/>
        <variable cmeta:id="v11" name="NFATp_c" private_interface="in" public_interface="out" units="uM"/>
        <variable cmeta:id="v12" name="NFATN_n" private_interface="in" public_interface="out" units="uM"/>
        <variable cmeta:id="v13" name="NFATN_c" private_interface="in" public_interface="out" units="uM"/>
        <variable cmeta:id="v14" name="act_N" private_interface="out" public_interface="in" units="dimensionless"/>
        <variable cmeta:id="v15" name="Ntot" private_interface="out" public_interface="in" units="uM"/>
        <variable cmeta:id="v16" name="Ccn" private_interface="out" public_interface="in" units="dimensionless"/>
        <variable cmeta:id="v17" name="t" private_interface="out" public_interface="in" units="s"/>
        <variable name="J_NFATNn" private_interface="in" public_interface="out" units="uM_per_s"/>
    </component>
    <component name="NFAT_Cycling_equations">
        <variable cmeta:id="v0" name="J1" units="uM_per_s"/>
        <variable cmeta:id="v1" name="J2" units="uM_per_s"/>
        <variable cmeta:id="v2" name="J3" units="uM_per_s"/>
        <variable cmeta:id="v3" name="J4" units="uM_per_s"/>
        <variable cmeta:id="v4" name="k_f1" public_interface="in" units="per_uM_s"/>
        <variable cmeta:id="v5" name="k_f2" public_interface="in" units="per_s"/>
        <variable cmeta:id="v6" name="k_f3" public_interface="in" units="per_s"/>
        <variable cmeta:id="v7" name="k_f4" public_interface="in" units="per_s"/>
        <variable cmeta:id="v8" name="k_r1" public_interface="in" units="per_s"/>
        <variable cmeta:id="v9" name="k_r3" public_interface="in" units="per_uM_s"/>
        <variable cmeta:id="v10" initial_value="0.000077917275" name="NFATp_n" public_interface="out" units="uM"/>
        <variable cmeta:id="v11" initial_value="0.0009957805651" name="NFATp_c" public_interface="out" units="uM"/>
        <variable cmeta:id="v12" initial_value="0.00010902441" name="NFATN_n" public_interface="out" units="uM"/>
        <variable cmeta:id="v13" initial_value="0.0000004806012" name="NFATN_c" public_interface="out" units="uM"/>
        <variable cmeta:id="v14" name="act_N" public_interface="in" units="dimensionless"/>
        <variable cmeta:id="v15" name="Ntot" public_interface="in" units="uM"/>
        <variable cmeta:id="v16" name="Ccn" public_interface="in" units="dimensionless"/>
        <variable cmeta:id="v17" name="t" public_interface="in" units="s"/>
        <variable name="J_NFATNn" public_interface="out" units="uM_per_s"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J1</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f1</ci>
                        <ci>NFATp_c</ci>
                        <ci>Ntot</ci>
                        <ci>act_N</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r1</ci>
                        <ci>NFATN_c</ci>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1</cn>
                            <ci>act_N</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply id="eq_0">
                <eq/>
                <ci>J2</ci>
                <apply>
                    <times/>
                    <ci>k_f2</ci>
                    <ci>NFATN_c</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J3</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f3</ci>
                        <ci>NFATN_n</ci>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1</cn>
                            <ci>act_N</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r3</ci>
                        <ci>NFATp_n</ci>
                        <ci>Ntot</ci>
                        <ci>act_N</ci>
                    </apply>
                </apply>
            </apply>
            <apply id="eq_1">
                <eq/>
                <ci>J4</ci>
                <apply>
                    <times/>
                    <ci>k_f4</ci>
                    <ci>NFATp_n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J_NFATNn</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>J2</ci>
                        <ci>Ccn</ci>
                    </apply>
                    <ci>J3</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>NFATp_c</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <divide/>
                        <ci>J4</ci>
                        <ci>Ccn</ci>
                    </apply>
                    <ci>J1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>NFATN_c</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J1</ci>
                    <ci>J2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>NFATN_n</ci>
                </apply>
                <ci>J_NFATNn</ci>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>NFATp_n</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J3</ci>
                    <ci>J4</ci>
                </apply>
            </apply>
        </math>
    </component>
    <group>
        <relationship_ref relationship="encapsulation"/>
        <component_ref component="NFAT_Cycling">
            <component_ref component="NFAT_Cycling_equations"/>
        </component_ref>
    </group>
    <connection>
        <map_components component_1="NFAT_Cycling" component_2="NFAT_Cycling_equations"/>
        <map_variables variable_1="k_f1" variable_2="k_f1"/>
        <map_variables variable_1="k_f2" variable_2="k_f2"/>
        <map_variables variable_1="k_f3" variable_2="k_f3"/>
        <map_variables variable_1="k_f4" variable_2="k_f4"/>
        <map_variables variable_1="k_r1" variable_2="k_r1"/>
        <map_variables variable_1="k_r3" variable_2="k_r3"/>
        <map_variables variable_1="NFATp_n" variable_2="NFATp_n"/>
        <map_variables variable_1="NFATp_c" variable_2="NFATp_c"/>
        <map_variables variable_1="NFATN_n" variable_2="NFATN_n"/>
        <map_variables variable_1="NFATN_c" variable_2="NFATN_c"/>
        <map_variables variable_1="act_N" variable_2="act_N"/>
        <map_variables variable_1="Ntot" variable_2="Ntot"/>
        <map_variables variable_1="Ccn" variable_2="Ccn"/>
        <map_variables variable_1="t" variable_2="t"/>
        <map_variables variable_1="J_NFATNn" variable_2="J_NFATNn"/>
    </connection>
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://www.cellml.org/cellml/1.1#NFATCycling">
            <dc:creator xmlns:dc="http://purl.org/dc/elements/1.1/" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <vCard:N xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#" rdf:parseType="Resource" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                    <vCard:Family xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Cooling</vCard:Family>
                    <vCard:Given xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">Michael</vCard:Given>
                </vCard:N>
                <vCard:EMAIL xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#">
                    <j.0:internet xmlns:j.0="http://imc.org/vCard/3.0#">
                        <rdf:value xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">m.cooling@auckland.ac.nz</rdf:value>
                    </j.0:internet>
                </vCard:EMAIL>
            </dc:creator>
            <dc:title xmlns:dc="http://purl.org/dc/elements/1.1/">Cooling's NFAT Cycling module for the Dual calcium protocol</dc:title>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:ID="v4">
            <semsim:isComputationalComponentFor xmlns:semsim="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_4">
                    <bqmodel:identity xmlns:bqmodel="http://biomodels.net/model-qualifiers/">
                        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_0">
                            <semsim:isComputationalComponentFor xmlns:semsim="http://www.bhi.washington.edu/SemSim#">
                                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_1">
                                    <ro:contained_in xmlns:ro="http://www.obofoundry.org/ro/ro.owl#">
                                        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_2">
                                            <ro:contained_in xmlns:ro="http://www.obofoundry.org/ro/ro.owl#">
                                                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_3">
                                                    <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/fma/FMA:14067" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                                                </rdf:Description>
                                            </ro:contained_in>
                                            <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/fma/FMA:66835" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                                        </rdf:Description>
                                    </ro:contained_in>
                                    <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/go/GO:0033173" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                                </rdf:Description>
                            </semsim:isComputationalComponentFor>
                            <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/biomodels.sbo/SBO:0000101" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                        </rdf:Description>
                    </bqmodel:identity>
                    <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/biomodels.sbo/SBO:0000614" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                </rdf:Description>
            </semsim:isComputationalComponentFor>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:ID="v5">
            <semsim:isComputationalComponentFor xmlns:semsim="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_5">
                    <bqmodel:identity xmlns:bqmodel="http://biomodels.net/model-qualifiers/">
                        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_5">
                            <semsim:isComputationalComponentFor xmlns:semsim="http://www.bhi.washington.edu/SemSim#">
                                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_4">
                                    <ro:contained_in xmlns:ro="http://www.obofoundry.org/ro/ro.owl#">
                                        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_3">
                                            <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/fma/FMA:14067" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                                        </rdf:Description>
                                    </ro:contained_in>
                                    <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/go/GO:0051531" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                                </rdf:Description>
                            </semsim:isComputationalComponentFor>
                            <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/biomodels.sbo/SBO:0000044" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                        </rdf:Description>
                    </bqmodel:identity>
                    <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/biomodels.sbo/SBO:0000614" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                </rdf:Description>
            </semsim:isComputationalComponentFor>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:ID="v6">
            <semsim:isComputationalComponentFor xmlns:semsim="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_6">
                    <bqmodel:identity xmlns:bqmodel="http://biomodels.net/model-qualifiers/">
                        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_0">
                            <semsim:isComputationalComponentFor xmlns:semsim="http://www.bhi.washington.edu/SemSim#">
                                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_1">
                                    <ro:contained_in xmlns:ro="http://www.obofoundry.org/ro/ro.owl#">
                                        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_2">
                                            <ro:contained_in xmlns:ro="http://www.obofoundry.org/ro/ro.owl#">
                                                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_3">
                                                    <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/fma/FMA:14067" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                                                </rdf:Description>
                                            </ro:contained_in>
                                            <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/fma/FMA:63840" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                                        </rdf:Description>
                                    </ro:contained_in>
                                    <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/go/GO:0033173" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                                </rdf:Description>
                            </semsim:isComputationalComponentFor>
                            <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/biomodels.sbo/SBO:0000101" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                        </rdf:Description>
                    </bqmodel:identity>
                    <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/biomodels.sbo/SBO:0000614" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                </rdf:Description>
            </semsim:isComputationalComponentFor>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:ID="v7">
            <semsim:isComputationalComponentFor xmlns:semsim="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_7">
                    <bqmodel:identity xmlns:bqmodel="http://biomodels.net/model-qualifiers/">
                        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_6">
                            <semsim:isComputationalComponentFor xmlns:semsim="http://www.bhi.washington.edu/SemSim#">
                                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_7">
                                    <ro:contained_in xmlns:ro="http://www.obofoundry.org/ro/ro.owl#">
                                        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_8">
                                            <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/fma/FMA:14067" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                                        </rdf:Description>
                                    </ro:contained_in>
                                    <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="file:///C:/Users/rlyn081/Documents/local_ontologies/gene_ontology_edit.obo#GO:2001318" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                                </rdf:Description>
                            </semsim:isComputationalComponentFor>
                            <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/biomodels.sbo/SBO:0000044" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                        </rdf:Description>
                    </bqmodel:identity>
                    <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/biomodels.sbo/SBO:0000614" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                </rdf:Description>
            </semsim:isComputationalComponentFor>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:ID="v8">
            <semsim:isComputationalComponentFor xmlns:semsim="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_8">
                    <bqmodel:identity xmlns:bqmodel="http://biomodels.net/model-qualifiers/">
                        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_0">
                            <semsim:isComputationalComponentFor xmlns:semsim="http://www.bhi.washington.edu/SemSim#">
                                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_1">
                                    <ro:contained_in xmlns:ro="http://www.obofoundry.org/ro/ro.owl#">
                                        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_2">
                                            <ro:contained_in xmlns:ro="http://www.obofoundry.org/ro/ro.owl#">
                                                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_3">
                                                    <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/fma/FMA:14067" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                                                </rdf:Description>
                                            </ro:contained_in>
                                            <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/fma/FMA:66835" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                                        </rdf:Description>
                                    </ro:contained_in>
                                    <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/go/GO:0033173" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                                </rdf:Description>
                            </semsim:isComputationalComponentFor>
                            <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/biomodels.sbo/SBO:0000104" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                        </rdf:Description>
                    </bqmodel:identity>
                    <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/biomodels.sbo/SBO:0000033" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                </rdf:Description>
            </semsim:isComputationalComponentFor>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:ID="v9">
            <semsim:isComputationalComponentFor xmlns:semsim="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_9">
                    <bqmodel:identity xmlns:bqmodel="http://biomodels.net/model-qualifiers/">
                        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_10">
                            <semsim:isComputationalComponentFor xmlns:semsim="http://www.bhi.washington.edu/SemSim#">
                                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_9">
                                    <ro:contained_in xmlns:ro="http://www.obofoundry.org/ro/ro.owl#">
                                        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_8">
                                            <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/fma/FMA:67216" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                                        </rdf:Description>
                                    </ro:contained_in>
                                    <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/go/GO:0033173" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                                </rdf:Description>
                            </semsim:isComputationalComponentFor>
                            <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/biomodels.sbo/SBO:0000104" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                        </rdf:Description>
                    </bqmodel:identity>
                    <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/biomodels.sbo/SBO:0000033" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                </rdf:Description>
            </semsim:isComputationalComponentFor>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:ID="v16">
            <bqbiol:identity xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="http://identifiers.org/opb/OPB_00375" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:ID="v17">
            <bqbiol:identity xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" rdf:resource="http://identifiers.org/opb/OPB_01361" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:ID="eq_0">
            <semsim:isComputationalComponentFor xmlns:semsim="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_18">
                    <ro:contained_in xmlns:ro="http://www.obofoundry.org/ro/ro.owl#">
                        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="h#entity_3">
                            <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/fma/FMA:14067" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                        </rdf:Description>
                    </ro:contained_in>
                    <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/go/GO:0051531" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                </rdf:Description>
            </semsim:isComputationalComponentFor>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:ID="eq_1">
            <semsim:isComputationalComponentFor xmlns:semsim="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_19">
                    <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/go/GO:0051531" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                    <ro:contained_in xmlns:ro="http://www.obofoundry.org/ro/ro.owl#">
                        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_3">
                            <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="http://identifiers.org/fma/FMA:14067" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                        </rdf:Description>
                    </ro:contained_in>
                    <semsim:refersTo xmlns:semsim="http://www.bhi.washington.edu/SemSim#" rdf:resource="file:///C:/Users/rlyn081/Documents/local_ontologies/gene_ontology_edit.obo#GO:2001318" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#"/>
                    <!-- no GO term exists for NFAT export -->
                </rdf:Description>
            </semsim:isComputationalComponentFor>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#xpointernode(component[@name='NFATCycling']/variable[@name='k_f1']/@initial_value)">
            <cito:usesDataFrom xmlns:cito="http://purl.org/spar/cito">doi:10.1113/jphysiol.2006.120048</cito:usesDataFrom>
            <cito:usesDataFrom xmlns:cito="http://purl.org/spar/cito">doi:10.1093/emboj/cdg381</cito:usesDataFrom>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#xpointernode(component[@name='NFATCycling']/variable[@name='k_f2']/@initial_value)">
            <cito:usesDataFrom xmlns:cito="http://purl.org/spar/cito">doi:10.1113/jphysiol.2006.120048</cito:usesDataFrom>
            <cito:usesDataFrom xmlns:cito="http://purl.org/spar/cito">doi:10.1093/emboj/cdg381</cito:usesDataFrom>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#xpointernode(component[@name='NFATCycling']/variable[@name='k_f3']/@initial_value)">
            <cito:usesDataFrom xmlns:cito="http://purl.org/spar/cito">doi:10.1113/jphysiol.2006.120048</cito:usesDataFrom>
            <cito:usesDataFrom xmlns:cito="http://purl.org/spar/cito">doi:10.1093/emboj/cdg381</cito:usesDataFrom>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#xpointernode(component[@name='NFATCycling']/variable[@name='k_f4']/@initial_value)">
            <cito:usesDataFrom xmlns:cito="http://purl.org/spar/cito">doi:10.1113/jphysiol.2006.120048</cito:usesDataFrom>
            <cito:usesDataFrom xmlns:cito="http://purl.org/spar/cito">doi:10.1093/emboj/cdg381</cito:usesDataFrom>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#xpointernode(component[@name='NFATCycling']/variable[@name='k_r1']/@initial_value)">
            <cito:usesDataFrom xmlns:cito="http://purl.org/spar/cito">doi:10.1113/jphysiol.2006.120048</cito:usesDataFrom>
            <cito:usesDataFrom xmlns:cito="http://purl.org/spar/cito">doi:10.1093/emboj/cdg381</cito:usesDataFrom>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#xpointernode(component[@name='NFATCycling']/variable[@name='k_r3']/@initial_value)">
            <cito:usesDataFrom xmlns:cito="http://purl.org/spar/cito">doi:10.1113/jphysiol.2006.120048</cito:usesDataFrom>
            <cito:usesDataFrom xmlns:cito="http://purl.org/spar/cito">doi:10.1093/emboj/cdg381</cito:usesDataFrom>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#xpointernode(component[@name='NFATCycling']/variable[@name='NFATp_n']/@initial_value)">
            <cito:usesDataFrom xmlns:cito="http://purl.org/spar/cito">doi:10.1093/emboj/cdg381</cito:usesDataFrom>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#xpointernode(component[@name='NFATCycling']/variable[@name='NFATp_n']/@initial_value)">
            <cito:usesDataFrom xmlns:cito="http://purl.org/spar/cito">doi:10.1093/emboj/cdg381</cito:usesDataFrom>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#xpointernode(component[@name='NFATCycling']/variable[@name='NFATN_n']/@initial_value)">
            <cito:usesDataFrom xmlns:cito="http://purl.org/spar/cito">doi:10.1093/emboj/cdg381</cito:usesDataFrom>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#xpointernode(component[@name='NFATCycling']/variable[@name='NFATN_c']/@initial_value)">
            <cito:usesDataFrom xmlns:cito="http://purl.org/spar/cito">doi:10.1093/emboj/cdg381</cito:usesDataFrom>
        </rdf:Description>
    </rdf:RDF>
</model>
