<?xml version='1.0' encoding='UTF-8'?>
<model cmeta:id="NFATCycling" name="NFATCycling" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="uM">
        <unit prefix="micro" units="mole"/>
        <unit exponent="-1" units="liter"/>
    </units>
    <units name="per_s">
        <unit exponent="-1" units="s"/>
    </units>
    <units name="uM_per_s">
        <unit units="uM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="per_uM_s">
        <unit exponent="-1" units="uM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
***       C   O   M   P   O   N   E   N   T   S       ***
*********************************************************
-->
    <component name="NFAT_Cycling">
        <!--        var{v4} k_f1: per_uM_s {init: 7.68934e-3, priv: out};
        var{v5} k_f2: per_s {init: 0.00144192, priv: out};
        var{v6} k_f3: per_s {init: 0.000361944, priv: out};
        var{v7} k_f4: per_s {init: 0.000444695, priv: out};
        var{v8} k_r1: per_s {init: 0.019256, priv: out};
        var{v9} k_r3: per_uM_s {init: 0.0470813, priv: out};
        var{v4} k_f1: per_uM_s {priv: in, pub: out};
        var{v5} k_f2: per_s {priv: in};
        var{v6} k_f3: per_s {priv: in};
        var{v7} k_f4: per_s {priv: in};
        var{v8} k_r1: per_s {priv: in};
        var{v9} k_r3: per_uM_s {priv: in};-->
        <variable name="NFATp_n" private_interface="in" public_interface="out" units="uM"/>
        <variable name="NFATp_c" private_interface="in" public_interface="out" units="uM"/>
        <variable name="NFATN_n" private_interface="in" public_interface="out" units="uM"/>
        <variable name="NFATN_c" private_interface="in" public_interface="out" units="uM"/>
        <variable name="act_N" private_interface="out" public_interface="in" units="dimensionless"/>
        <variable name="Ntot" private_interface="out" public_interface="in" units="uM"/>
        <variable cmeta:id="v16" name="Ccn" private_interface="out" public_interface="in" units="dimensionless"/>
        <variable cmeta:id="v17" name="t" private_interface="out" public_interface="in" units="s"/>
        <variable name="J_NFATNn" private_interface="in" public_interface="out" units="uM_per_s"/>
    </component>
    <component name="NFAT_Cycling_equations">
        <variable name="J1" units="uM_per_s"/>
        <variable name="J2" units="uM_per_s"/>
        <variable name="J3" units="uM_per_s"/>
        <variable name="J4" units="uM_per_s"/>
        <variable cmeta:id="v4" name="k_f1" public_interface="in" units="per_uM_s"/>
        <variable cmeta:id="v5" name="k_f2" public_interface="in" units="per_s"/>
        <variable cmeta:id="v6" name="k_f3" public_interface="in" units="per_s"/>
        <variable cmeta:id="v7" name="k_f4" public_interface="in" units="per_s"/>
        <variable cmeta:id="v8" name="k_r1" public_interface="in" units="per_s"/>
        <variable cmeta:id="v9" name="k_r3" public_interface="in" units="per_uM_s"/>
        <variable initial_value="0.0" name="NFATp_n" public_interface="out" units="uM"/>
        <!--0.000077917275-->
        <variable initial_value="0.9957805651" name="NFATp_c" public_interface="out" units="uM"/>
        <variable initial_value="0.0" name="NFATN_n" public_interface="out" units="uM"/>
        <!--0.00010902441-->
        <variable initial_value="0.0" name="NFATN_c" public_interface="out" units="uM"/>
        <!--0.0000004806012-->
        <variable name="act_N" public_interface="in" units="dimensionless"/>
        <variable name="Ntot" public_interface="in" units="uM"/>
        <variable cmeta:id="v16" name="Ccn" public_interface="in" units="dimensionless"/>
        <variable cmeta:id="v17" name="t" public_interface="in" units="s"/>
        <variable name="J_NFATNn" public_interface="out" units="uM_per_s"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J1</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f1</ci>
                        <ci>NFATp_c</ci>
                        <ci>Ntot</ci>
                        <ci>act_N</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r1</ci>
                        <ci>NFATN_c</ci>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1</cn>
                            <ci>act_N</ci>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <apply id="eq_0">
                <eq/>
                <ci>J2</ci>
                <apply>
                    <times/>
                    <ci>k_f2</ci>
                    <ci>NFATN_c</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J3</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f3</ci>
                        <ci>NFATN_n</ci>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">1</cn>
                            <ci>act_N</ci>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r3</ci>
                        <ci>NFATp_n</ci>
                        <ci>Ntot</ci>
                        <ci>act_N</ci>
                    </apply>
                </apply>
            </apply>
            <apply id="eq_1">
                <eq/>
                <ci>J4</ci>
                <apply>
                    <times/>
                    <ci>k_f4</ci>
                    <ci>NFATp_n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J_NFATNn</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>J2</ci>
                        <ci>Ccn</ci>
                    </apply>
                    <ci>J3</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>NFATp_c</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <divide/>
                        <ci>J4</ci>
                        <ci>Ccn</ci>
                    </apply>
                    <ci>J1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>NFATN_c</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J1</ci>
                    <ci>J2</ci>
                </apply>
            </apply>
            <!--ode(NFATN_n, t) = J_NFATNn;-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>NFATp_n</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J3</ci>
                    <ci>J4</ci>
                </apply>
            </apply>
        </math>
    </component>
    <group>
        <relationship_ref relationship="encapsulation"/>
        <component_ref component="NFAT_Cycling">
            <component_ref component="NFAT_Cycling_equations"/>
        </component_ref>
    </group>
    <connection>
        <map_components component_1="NFAT_Cycling" component_2="NFAT_Cycling_equations"/>
        <!--        vars k_f1 and k_f1;
        vars k_f2 and k_f2;
        vars k_f3 and k_f3;
        vars k_f4 and k_f4;
        vars k_r1 and k_r1;
        vars k_r3 and k_r3;-->
        <map_variables variable_1="NFATp_n" variable_2="NFATp_n"/>
        <map_variables variable_1="NFATp_c" variable_2="NFATp_c"/>
        <map_variables variable_1="NFATN_n" variable_2="NFATN_n"/>
        <map_variables variable_1="NFATN_c" variable_2="NFATN_c"/>
        <map_variables variable_1="act_N" variable_2="act_N"/>
        <map_variables variable_1="Ntot" variable_2="Ntot"/>
        <map_variables variable_1="Ccn" variable_2="Ccn"/>
        <map_variables variable_1="t" variable_2="t"/>
        <map_variables variable_1="J_NFATNn" variable_2="J_NFATNn"/>
    </connection>
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://www.cellml.org/cellml/1.1#NFATCycling">
            <creator xmlns="http://purl.org/dc/elements/1.1/">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n1"/>
            </creator>
            <title xmlns="http://purl.org/dc/elements/1.1/" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Cooling's NFAT Cycling module for the Dual calcium protocol</title>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n1">
            <N xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n2"/>
            </N>
            <EMAIL xmlns="http://www.w3.org/2001/vcard-rdf/3.0#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n3"/>
            </EMAIL>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n2">
            <Family xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Cooling</Family>
            <Given xmlns="http://www.w3.org/2001/vcard-rdf/3.0#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">Michael</Given>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:nodeID="n3">
            <rdf:type xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://imc.org/vCard/3.0#internet"/>
            </rdf:type>
            <rdf:value xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">m.cooling@auckland.ac.nz</rdf:value>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#v4">
            <isComputationalComponentFor xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_4"/>
            </isComputationalComponentFor>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_4">
            <identity xmlns="http://biomodels.net/model-qualifiers/">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_0"/>
            </identity>
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/biomodels.sbo/SBO:0000614"/>
            </refersTo>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_0">
            <isComputationalComponentFor xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_1"/>
            </isComputationalComponentFor>
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/biomodels.sbo/SBO:0000101"/>
            </refersTo>
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/biomodels.sbo/SBO:0000104"/>
            </refersTo>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_1">
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/go/GO:0033173"/>
            </refersTo>
            <contained_in xmlns="http://www.obofoundry.org/ro/ro.owl#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_2"/>
            </contained_in>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_2">
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/fma/FMA:66835"/>
            </refersTo>
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/fma/FMA:63840"/>
            </refersTo>
            <contained_in xmlns="http://www.obofoundry.org/ro/ro.owl#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_3"/>
            </contained_in>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_3">
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/fma/FMA:14067"/>
            </refersTo>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#v5">
            <isComputationalComponentFor xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_5"/>
            </isComputationalComponentFor>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_5">
            <identity xmlns="http://biomodels.net/model-qualifiers/">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_5"/>
            </identity>
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/biomodels.sbo/SBO:0000614"/>
            </refersTo>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_5">
            <isComputationalComponentFor xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_4"/>
            </isComputationalComponentFor>
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/biomodels.sbo/SBO:0000044"/>
            </refersTo>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_4">
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/go/GO:0051531"/>
            </refersTo>
            <contained_in xmlns="http://www.obofoundry.org/ro/ro.owl#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_3"/>
            </contained_in>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#v6">
            <isComputationalComponentFor xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_6"/>
            </isComputationalComponentFor>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_6">
            <identity xmlns="http://biomodels.net/model-qualifiers/">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_0"/>
            </identity>
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/biomodels.sbo/SBO:0000614"/>
            </refersTo>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#v7">
            <isComputationalComponentFor xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_7"/>
            </isComputationalComponentFor>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_7">
            <identity xmlns="http://biomodels.net/model-qualifiers/">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_6"/>
            </identity>
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/biomodels.sbo/SBO:0000614"/>
            </refersTo>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_6">
            <isComputationalComponentFor xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_7"/>
            </isComputationalComponentFor>
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/biomodels.sbo/SBO:0000044"/>
            </refersTo>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_7">
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="//C:/Users/rlyn081/Documents/local_ontologies/gene_ontology_edit.obo#GO:2001318"/>
            </refersTo>
            <contained_in xmlns="http://www.obofoundry.org/ro/ro.owl#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_8"/>
            </contained_in>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_8">
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/fma/FMA:14067"/>
            </refersTo>
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/fma/FMA:67216"/>
            </refersTo>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#v8">
            <isComputationalComponentFor xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_8"/>
            </isComputationalComponentFor>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_8">
            <identity xmlns="http://biomodels.net/model-qualifiers/">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_0"/>
            </identity>
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/biomodels.sbo/SBO:0000033"/>
            </refersTo>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#v9">
            <isComputationalComponentFor xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_9"/>
            </isComputationalComponentFor>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_9">
            <identity xmlns="http://biomodels.net/model-qualifiers/">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_10"/>
            </identity>
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/biomodels.sbo/SBO:0000033"/>
            </refersTo>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_10">
            <isComputationalComponentFor xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_9"/>
            </isComputationalComponentFor>
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/biomodels.sbo/SBO:0000104"/>
            </refersTo>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_9">
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/go/GO:0033173"/>
            </refersTo>
            <contained_in xmlns="http://www.obofoundry.org/ro/ro.owl#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_8"/>
            </contained_in>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#v16">
            <identity xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/opb/OPB_00375"/>
            </identity>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#v17">
            <identity xmlns="http://biomodels.net/biology-qualifiers/">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/opb/OPB_01361"/>
            </identity>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#eq_0">
            <isComputationalComponentFor xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_18"/>
            </isComputationalComponentFor>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_18">
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/go/GO:0051531"/>
            </refersTo>
            <contained_in xmlns="http://www.obofoundry.org/ro/ro.owl#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="h#entity_3"/>
            </contained_in>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="h#entity_3">
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/fma/FMA:14067"/>
            </refersTo>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#eq_1">
            <isComputationalComponentFor xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_19"/>
            </isComputationalComponentFor>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#property_19">
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="http://identifiers.org/go/GO:0051531"/>
            </refersTo>
            <refersTo xmlns="http://www.bhi.washington.edu/SemSim#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="//C:/Users/rlyn081/Documents/local_ontologies/gene_ontology_edit.obo#GO:2001318"/>
            </refersTo>
            <contained_in xmlns="http://www.obofoundry.org/ro/ro.owl#">
                <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#entity_3"/>
            </contained_in>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#xpointernode(component[@name='NFATCycling']/variable[@name='k_f1']/@initial_value)">
            <citousesDataFrom xmlns="http://purl.org/spar/" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">doi:10.1113/jphysiol.2006.120048</citousesDataFrom>
            <citousesDataFrom xmlns="http://purl.org/spar/" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">doi:10.1093/emboj/cdg381</citousesDataFrom>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#xpointernode(component[@name='NFATCycling']/variable[@name='k_f2']/@initial_value)">
            <citousesDataFrom xmlns="http://purl.org/spar/" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">doi:10.1113/jphysiol.2006.120048</citousesDataFrom>
            <citousesDataFrom xmlns="http://purl.org/spar/" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">doi:10.1093/emboj/cdg381</citousesDataFrom>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#xpointernode(component[@name='NFATCycling']/variable[@name='k_f3']/@initial_value)">
            <citousesDataFrom xmlns="http://purl.org/spar/" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">doi:10.1113/jphysiol.2006.120048</citousesDataFrom>
            <citousesDataFrom xmlns="http://purl.org/spar/" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">doi:10.1093/emboj/cdg381</citousesDataFrom>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#xpointernode(component[@name='NFATCycling']/variable[@name='k_f4']/@initial_value)">
            <citousesDataFrom xmlns="http://purl.org/spar/" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">doi:10.1113/jphysiol.2006.120048</citousesDataFrom>
            <citousesDataFrom xmlns="http://purl.org/spar/" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">doi:10.1093/emboj/cdg381</citousesDataFrom>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#xpointernode(component[@name='NFATCycling']/variable[@name='k_r1']/@initial_value)">
            <citousesDataFrom xmlns="http://purl.org/spar/" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">doi:10.1113/jphysiol.2006.120048</citousesDataFrom>
            <citousesDataFrom xmlns="http://purl.org/spar/" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">doi:10.1093/emboj/cdg381</citousesDataFrom>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#xpointernode(component[@name='NFATCycling']/variable[@name='k_r3']/@initial_value)">
            <citousesDataFrom xmlns="http://purl.org/spar/" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">doi:10.1113/jphysiol.2006.120048</citousesDataFrom>
            <citousesDataFrom xmlns="http://purl.org/spar/" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">doi:10.1093/emboj/cdg381</citousesDataFrom>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#xpointernode(component[@name='NFATCycling']/variable[@name='NFATp_n']/@initial_value)">
            <citousesDataFrom xmlns="http://purl.org/spar/" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">doi:10.1093/emboj/cdg381</citousesDataFrom>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#xpointernode(component[@name='NFATCycling']/variable[@name='NFATN_n']/@initial_value)">
            <citousesDataFrom xmlns="http://purl.org/spar/" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">doi:10.1093/emboj/cdg381</citousesDataFrom>
        </rdf:Description>
        <rdf:Description xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" rdf:about="#xpointernode(component[@name='NFATCycling']/variable[@name='NFATN_c']/@initial_value)">
            <citousesDataFrom xmlns="http://purl.org/spar/" xml:lang="en" xmlns:xml="http://www.w3.org/XML/1998/namespace">doi:10.1093/emboj/cdg381</citousesDataFrom>
        </rdf:Description>
    </rdf:RDF>
</model>
